Journal

Version VersionNumber=2.4
Open Interactive
  stImageNames = "E:\telofish SPC 40X tiffs Janet\N1402A telofish SPC 40X-0007\N1402A telofish SPC 40X-0007_c2.TIF"
  nImageSetNumbers = -1
  loadImage = "Open"
Assign Variable
  path = Image.FileDrive + Image.FileDir + Image.FileName
Arithmetic
  iOperation = 3
  iSecondSource = 2
  nNumerator = 1
  nDenominator = 1
  nResultDepth = 16
  imSource1 = m 1 7 9 0 1 1 0 31 N1402A telofish SPC 40X-0007_c2
  imSource2 = m 1 2 9 2 1 -1 -1 8 Untitled
  imDest = "telomere"
Open Next
  nextIm = "Open Next"
Arithmetic
  iOperation = 3
  iSecondSource = 2
  nNumerator = 1
  nDenominator = 1
  nResultDepth = 16
  imSource1 = m 1 7 9 0 1 4 0 31 N1402A telofish SPC 40X-0007_c3
  imSource2 = m 1 2 9 2 1 -1 -1 8 Untitled
  imDest = "SPC"
Open Next
  nextIm = "Open Next"
Comment: create color image
Arithmetic
  iOperation = 3
  iSecondSource = 2
  nNumerator = 1
  nDenominator = 1
  nResultDepth = 16
  imSource1 = m 1 7 9 0 1 6 0 31 N1402A telofish SPC 40X-0007_c4
  imSource2 = m 1 2 9 2 1 -1 -1 8 Untitled
  imDest = "DAPI"
Color Combine
  imRed = m 1 7 9 0 1 3 0 8 Untitled
  imGreen = m 1 7 9 0 1 5 0 8 Untitled
  imBlue = m 1 7 9 0 1 7 0 8 Untitled
  imStack = m 1 2 9 2 1 -1 -1 8 Untitled
  imDest = "Color Combine"
  imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
  bColorEncode = FALSE
  nSource = 1
  nResultDepth = 2
  bHueRendering = FALSE
Comment: find nuclei
Count Nuclei
  imNucleusSrc = m 1 7 9 0 1 6 0 4 DAPI
  imNucleusDest = "nuclei"
  dApproxMinWidth = 20
  dApproxMaxWidth = 60
  dNucleusMinIntesity = 6000
  iRootAlgorithm = 0
  bNucleusResult = TRUE
  ASSAY_config_summary_log_string = "HRO     "
  ASSAY_config_data_log_string = "RO    "
Threshold Image
  srcThresh = "Nuclei"
  min = 1
  max = 65535
  bMore = FALSE
  idxState = 1
  nTab = 1
  nMinMaxRange = 5
  bTransparentThresh = FALSE
  dTransparencyPct = 0.5
  byThreshRed = 255
  byThreshGreen = 128
  byThreshBlue = 64
  nThreshDisplayMode = 1
Disabled PausePlayback
Binary Operations
  imSource = "Nuclei"
  imDest = "Binary Nuclei"
  bUseThresholdVars = TRUE
  nThresholdState = 1
  uThresholdMin = 1
  uThresholdMax = 65535
Comment: expand the nuclei and create a region around the expanded nuclei.  then transfer the regions to the SPC image
Dilate Image
  imSource = m 1 7 9 0 1 11 0 8 Untitled
  imDest = "dilate nuclei"
  nThresh = 1
  cRepeat = 1
  bDilateWithoutClose = TRUE
Create Regions Around Objects
  imSource = "dilate nuclei"
Transfer Regions
  imSourceImage = "dilate nuclei"
  imDestImage = m 1 7 9 0 1 8 0 3 SPC
  nRegionSel = 2
  bSrcClear = FALSE
  bDstClear = TRUE
Transfer Regions
  imSourceImage = "dilate nuclei"
  imDestImage = "SPC"
  nRegionSel = 2
  bSrcClear = TRUE
  bDstClear = TRUE
Comment: create nuclear and perinuclear intensity images
Arithmetic
  iOperation = 2
  iSecondSource = 1
  nNumerator = 0
  nDenominator = 1
  nResultDepth = 16
  imSource1 = "dilate nuclei"
  imSource2 = "Binary Nuclei"
  imDest = "nuclei background"
Arithmetic
  iOperation = 8
  iSecondSource = 1
  nNumerator = 16
  nDenominator = 1
  nResultDepth = 16
  imSource1 = "DAPI"
  imSource2 = "nuclei background"
  imDest = "nuclei background intensity"
Arithmetic
  iOperation = 8
  iSecondSource = 1
  nNumerator = 16
  nDenominator = 1
  nResultDepth = 16
  imSource1 = "DAPI"
  imSource2 = "Binary Nuclei"
  imDest = "nuclei intensity"
Arithmetic
  iOperation = 8
  iSecondSource = 1
  nNumerator = 16
  nDenominator = 1
  nResultDepth = 16
  imSource1 = "DAPI"
  imSource2 = "dilate nuclei"
  imDest = "dilate nuclei intensity"
Comment: find telomeres, remove non-nuclear telo spots and create a mask - Binary Telomeres
Count Nuclei
  imNucleusSrc = m 1 7 9 0 1 3 0 8 telomere
  imNucleusDest = "telo spots"
  dApproxMinWidth = 1
  dApproxMaxWidth = 2
  dNucleusMinIntesity = 2000
  iRootAlgorithm = 0
  bNucleusResult = TRUE
  ASSAY_config_summary_log_string = ""
  ASSAY_config_data_log_string = ""
Arithmetic
  iOperation = 8
  iSecondSource = 1
  nNumerator = 16
  nDenominator = 1
  nResultDepth = 16
  imSource1 = "telo spots"
  imSource2 = "Binary Nuclei"
  imDest = "telo spots"
Threshold Image
  srcThresh = "telo spots"
  min = 1
  max = 65535
  bMore = FALSE
  idxState = 1
  nTab = 1
  nMinMaxRange = 5
  bTransparentThresh = FALSE
  dTransparencyPct = 0.5
  byThreshRed = 255
  byThreshGreen = 128
  byThreshBlue = 64
  nThreshDisplayMode = 1
Binary Operations
  imSource = "telo spots"
  imDest = "Binary Telomeres"
  bUseThresholdVars = TRUE
  nThresholdState = 1
  uThresholdMin = 1
  uThresholdMax = 65535
Comment: create the perinuclear and nuclear masked intensity images
Dilate Image
  imSource = m 1 7 9 0 1 23 0 8 Untitled
  imDest = "dilate telomeres"
  nThresh = 1
  cRepeat = 1
  bDilateWithoutClose = TRUE
Arithmetic
  iOperation = 2
  iSecondSource = 1
  nNumerator = 0
  nDenominator = 1
  nResultDepth = 16
  imSource1 = m 1 7 9 0 1 24 0 8 Untitled
  imSource2 = m 1 7 9 0 1 23 0 8 Untitled
  imDest = "telomere background"
Arithmetic
  iOperation = 8
  iSecondSource = 1
  nNumerator = 16
  nDenominator = 1
  nResultDepth = 16
  imSource1 = m 1 7 9 0 1 3 0 8 Untitled
  imSource2 = m 1 7 9 0 1 25 0 8 Untitled
  imDest = "telomere background intensity"
Arithmetic
  iOperation = 8
  iSecondSource = 1
  nNumerator = 16
  nDenominator = 1
  nResultDepth = 16
  imSource1 = m 1 7 9 0 1 3 0 8 Untitled
  imSource2 = m 1 7 9 0 1 23 0 8 Untitled
  imDest = "telomere intensity"
Arithmetic
  iOperation = 8
  iSecondSource = 1
  nNumerator = 16
  nDenominator = 1
  nResultDepth = 16
  imSource1 = m 1 7 9 0 1 3 0 8 Untitled
  imSource2 = m 1 7 9 0 1 24 0 8 Untitled
  imDest = "dilate telomere intensity"
Threshold Image
  srcThresh = m 1 7 9 0 1 17 0 8 Untitled
  min = 1
  max = 65535
  bMore = FALSE
  idxState = 1
  nTab = 1
  nMinMaxRange = 5
  bTransparentThresh = FALSE
  dTransparencyPct = 0.5
  byThreshRed = 255
  byThreshGreen = 128
  byThreshBlue = 64
  nThreshDisplayMode = 1
Threshold Image
  srcThresh = m 1 7 9 0 1 18 0 8 Untitled
  min = 1
  max = 65535
  bMore = FALSE
  idxState = 1
  nTab = 1
  nMinMaxRange = 5
  bTransparentThresh = FALSE
  dTransparencyPct = 0.5
  byThreshRed = 255
  byThreshGreen = 128
  byThreshBlue = 64
  nThreshDisplayMode = 1
Threshold Image
  srcThresh = m 1 7 9 0 1 19 0 8 Untitled
  min = 1
  max = 65535
  bMore = FALSE
  idxState = 1
  nTab = 1
  nMinMaxRange = 5
  bTransparentThresh = FALSE
  dTransparencyPct = 0.5
  byThreshRed = 255
  byThreshGreen = 128
  byThreshBlue = 64
  nThreshDisplayMode = 1
Select Image
  im = m 1 7 9 0 1 5 0 8 Untitled
  prompt = "bring SPC to the front"
Threshold Image
  srcThresh = m 1 7 9 0 1 26 0 8 Untitled
  min = 1
  max = 65535
  bMore = FALSE
  idxState = 1
  nTab = 1
  nMinMaxRange = 5
  bTransparentThresh = FALSE
  dTransparencyPct = 0.5
  byThreshRed = 255
  byThreshGreen = 128
  byThreshBlue = 64
  nThreshDisplayMode = 1
Threshold Image
  srcThresh = m 1 7 9 0 1 27 0 8 Untitled
  min = 1
  max = 65535
  bMore = FALSE
  idxState = 1
  nTab = 1
  nMinMaxRange = 5
  bTransparentThresh = FALSE
  dTransparencyPct = 0.5
  byThreshRed = 255
  byThreshGreen = 128
  byThreshBlue = 64
  nThreshDisplayMode = 1
Threshold Image
  srcThresh = m 1 7 9 0 1 28 0 8 Untitled
  min = 1
  max = 65535
  bMore = FALSE
  idxState = 1
  nTab = 1
  nMinMaxRange = 5
  bTransparentThresh = FALSE
  dTransparencyPct = 0.5
  byThreshRed = 255
  byThreshGreen = 128
  byThreshBlue = 64
  nThreshDisplayMode = 1
Disabled Loop for all Regions
  im = m 1 7 9 0 1 5 0 8 Untitled
  stJournalName = "C:\Users\wolters1\Desktop\telo in SPC individual cell_3.JNL"
