Journal

Version VersionNumber=2.4
Comment: open log in case it is not already open
Open Data Log Interactive
  bOpenFile = FALSE
  bOpenDDE = TRUE
  stOpenFile = "" Override=None OverrideVariable=File Path
  nOpenFileMode = 0 Override=None OverrideVariable=File Mode
  stDDEContext = "Excel:name	2	1" Override=None OverrideVariable=DDE Context
Assign Variable
  nucleus = str(region.label)
Comment: Move down by 3 lines and log the region label and the image name
Set Logging Row and Column
  nLogType = 1
  bAbsoluteRowMode = FALSE
  bAbsoluteColMode = TRUE
  nRow = 3
  nCol = 1
  nRowOffset = 3
  nColOffset = 0
  bSetAnchorCol = FALSE
  bRefFromLastPos = TRUE
Log Variable
  nLogType = 1
  stVariable = "nucleus"
  bOneLine = TRUE
  bLogHeader = FALSE
Set Logging Row and Column
  nLogType = 1
  bAbsoluteRowMode = FALSE
  bAbsoluteColMode = FALSE
  nRow = 3
  nCol = 1
  nRowOffset = 0
  nColOffset = 1
  bSetAnchorCol = FALSE
  bRefFromLastPos = TRUE
Log Variable
  nLogType = 1
  stVariable = "path"
  bOneLine = TRUE
  bLogHeader = FALSE
Set Logging Row and Column
  nLogType = 1
  bAbsoluteRowMode = FALSE
  bAbsoluteColMode = TRUE
  nRow = 3
  nCol = 1
  nRowOffset = 0
  nColOffset = 0
  bSetAnchorCol = FALSE
  bRefFromLastPos = TRUE

Transfer Regions
  imSourceImage = m 1 5 9 0 1 -1 -1 3 SPC
  imDestImage = "telomere background intensity"
  nRegionSel = 1
  bSrcClear = FALSE
  bDstClear = FALSE
Transfer Regions
  imSourceImage = m 1 5 9 0 1 -1 -1 3 SPC
  imDestImage = "telomere intensity"
  nRegionSel = 1
  bSrcClear = FALSE
  bDstClear = FALSE
Transfer Regions
  imSourceImage = m 1 5 9 0 1 -1 -1 3 SPC
  imDestImage = "dilate telomere intensity"
  nRegionSel = 1
  bSrcClear = FALSE
  bDstClear = FALSE
Image/Plane
  dupPlaneImage = "telomere background intensity"
  copyIm = "Image/Plane"
Image/Plane
  dupPlaneImage = "telomere intensity"
  copyIm = "Image/Plane"
Image/Plane
  dupPlaneImage = "dilate telomere intensity"
  copyIm = "Image/Plane"
Create Regions Around Objects
  imSource = m 1 7 9 0 1 13 0 8 Untitled
Transfer Regions
  imSourceImage = m 1 7 9 0 1 13 0 37 Copy of telomere background intensity
  imDestImage = m 1 7 9 0 1 11 0 26 Copy of telomere intensity
  nRegionSel = 2
  bSrcClear = FALSE
  bDstClear = FALSE
Transfer Regions
  imSourceImage = m 1 7 9 0 1 13 0 37 Copy of telomere background intensity
  imDestImage = m 1 7 9 0 1 12 0 26 Copy of telomere intensity
  nRegionSel = 2
  bSrcClear = FALSE
  bDstClear = FALSE
Create Regions Around Objects
  imSource = "dilate nuclei intensity"
Comment: measure all of the telomere regions
Region Measurements
  imSource = m 1 7 10 0 1 11 0 37 Copy of telomere background intensity
  nSelectorPlane = 10
  nTab = 2
  nPopInclude = 0
  nDisplayViews = 0
  nRegionLabel = 4
  nChannel = 0
  bUseThreshold = TRUE
  abMeasurements = TRUE TRUE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE TRUE FALSE FALSE TRUE TRUE FALSE FALSE FALSE TRUE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
  abRegionLabels = TRUE FALSE FALSE FALSE FALSE FALSE FALSE TRUE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE
  nSpecifiedPlane = 1
  nPopGraphType = 0
  anPopGraphXAxis = 0 0 0 0
  anPopGraphYAxis = 0 0 0 0
  nGraphNumBin = 10
  nPopGraphUnit = 0
  strGraphSettings = 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
  bLogCalibration = FALSE
  bLogHeaders = TRUE
Region Measurements
  imSource = m 1 7 10 0 1 12 0 26 Copy of telomere intensity
  nSelectorPlane = 10
  nTab = 2
  nPopInclude = 0
  nDisplayViews = 0
  nRegionLabel = 4
  nChannel = 0
  bUseThreshold = TRUE
  abMeasurements = TRUE TRUE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE TRUE FALSE FALSE TRUE TRUE FALSE FALSE FALSE TRUE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
  abRegionLabels = TRUE FALSE FALSE FALSE FALSE FALSE FALSE TRUE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE
  nSpecifiedPlane = 1
  nPopGraphType = 0
  anPopGraphXAxis = 0 0 0 0
  anPopGraphYAxis = 0 0 0 0
  nGraphNumBin = 10
  nPopGraphUnit = 0
  strGraphSettings = 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
  bLogCalibration = FALSE
  bLogHeaders = TRUE
Close
  im = m 1 7 9 0 1 13 0 8 Untitled
  bSaveIt = FALSE
Close
  im = m 1 7 9 0 1 12 0 8 Untitled
  bSaveIt = FALSE
Close
  im = m 1 7 9 0 1 11 0 8 Untitled
  bSaveIt = FALSE
Disabled Select Region Interactive
  imSource = m 1 3 9 0 1 -1 -1 8 Untitled
  stRegionLabel = ""
Transfer Regions
  imSourceImage = m 1 5 9 0 1 -1 -1 31 Copy of dilate nuclei intensity
  imDestImage = "dilate nuclei intensity"
  nRegionSel = 1
  bSrcClear = FALSE
  bDstClear = TRUE
Transfer Regions
  imSourceImage = m 1 5 9 0 1 -1 -1 31 Copy of dilate nuclei intensity
  imDestImage = "nuclei background intensity"
  nRegionSel = 1
  bSrcClear = FALSE
  bDstClear = TRUE
Transfer Regions
  imSourceImage = m 1 5 9 0 1 -1 -1 31 Copy of dilate nuclei intensity
  imDestImage = "nuclei intensity"
  nRegionSel = 1
  bSrcClear = FALSE
  bDstClear = TRUE
Comment: Enter Your Comment
Region Measurements
  imSource = "nuclei intensity"
  nSelectorPlane = 10
  nTab = 2
  nPopInclude = 0
  nDisplayViews = 0
  nRegionLabel = 4
  nChannel = 0
  bUseThreshold = TRUE
  abMeasurements = TRUE TRUE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE TRUE FALSE FALSE TRUE TRUE FALSE FALSE FALSE TRUE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
  abRegionLabels = TRUE FALSE FALSE FALSE FALSE FALSE FALSE TRUE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE
  nSpecifiedPlane = 1
  nPopGraphType = 0
  anPopGraphXAxis = 0 0 0 0
  anPopGraphYAxis = 0 0 0 0
  nGraphNumBin = 10
  nPopGraphUnit = 0
  strGraphSettings = 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
  bLogCalibration = FALSE
  bLogHeaders = TRUE
Region Measurements
  imSource = "nuclei background intensity"
  nSelectorPlane = 10
  nTab = 2
  nPopInclude = 0
  nDisplayViews = 0
  nRegionLabel = 4
  nChannel = 0
  bUseThreshold = TRUE
  abMeasurements = TRUE TRUE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE TRUE FALSE FALSE TRUE TRUE FALSE FALSE FALSE TRUE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
  abRegionLabels = TRUE FALSE FALSE FALSE FALSE FALSE FALSE TRUE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE
  nSpecifiedPlane = 1
  nPopGraphType = 0
  anPopGraphXAxis = 0 0 0 0
  anPopGraphYAxis = 0 0 0 0
  nGraphNumBin = 10
  nPopGraphUnit = 0
  strGraphSettings = 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
  bLogCalibration = FALSE
  bLogHeaders = TRUE
Disabled Close Data Log
